//Select Directories================================================================
input = getDirectory("Image Directory");
h2bfiles = getDirectory("H2B Image Directory");
roioutput = getDirectory("ROI Directory");
//cropoutput = getDirectory("Crop Image Destination");

//HOUSEKEEPING SCRIPTS===============================================================

//put filename, including extension, into list
//h2b = getFileList(h2binput);
//roi = getFileList(roioutput);

//select roi from h2b files
function splitchannel(input,h2bfiles,filename) {
		run("Bio-Formats", "open=["+input+filename+"] autoscale color_mode=Grayscale rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
		selectWindow(filename);
		run("Split Channels");
		selectWindow("C2-"+filename);
		imagename = File.getNameWithoutExtension(input+filename); //remove the extension of opened filename
		saveAs("Tiff",h2bfiles+"H2B_"+imagename+".tif");
		run("Close All");
}

function roiselection(input,h2binput, roioutput, filename, gemimage) {
        //open(h2binput+filename); //to open images without the bioformats importer
        run("Bio-Formats", "open=["+h2binput+filename+"] autoscale color_mode=Grayscale rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
        run("Bio-Formats", "open=["+input+gemimage+"] autoscale color_mode=Grayscale rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT");
        selectWindow(filename);
        run("Duplicate...", "duplicate");
        imagename = File.getNameWithoutExtension(h2binput+filename); //remove the extension of opened filename
		//select roi and add them into roi manager
		run("Smooth");
		setAutoThreshold("Yen dark");
		setOption("BlackBackground", true);
		waitForUser("select threshold");
		run("Convert to Mask");
		run("Erode");
		//run("Erode");
		//run("Erode");
		run("Fill Holes");
		run("Remove Outliers...", "radius=10 threshold=50 which=Bright");
		run("Dilate");
		run("Dilate");
		//run("Dilate");
		//run("Fill Holes");
		run("Watershed");
		run("Analyze Particles...", "size=25-Infinity circularity=0.4-1.00 add");
		waitForUser("check ROI");
		//save roi set into a zip file and clean roimanager
		n=roiManager("count");
		if (n>0) {
			x=newArray(n);
			for (j=0;j<n;j++){
				x[j]=j;
			}
			roiManager("Select", x);
			roiManager("Save", roioutput+imagename+".zip");
			roiManager("Select", x);
			roiManager("Delete");
			run("Close All");
		}
		else {	
			print(i+"\t"+filename);
			close();
		}
}
//CONDUCTING SCRIPTS===================================================================

//get roi
allfiles = getFileList(input);

//for (i = 0; i < allfiles.length; i++) {
    //if (i%2==1) {
    //print (i);
    //splitchannel(input, h2bfiles, allfiles[i]);
    //}
//}
h2b = getFileList(h2bfiles);

//get roi_if movie is odd number (i=0.2.4)
for (i = 0; i < h2b.length; i++) {
	roiselection(input,h2bfiles, roioutput, h2b[i], allfiles[2*i]);
}

//get roi_if movie is even number (i=1.3.5)

//for (i = 0; i < h2b.length; i++) {
	//if (i==0) {
	//roiselection(input,h2bfiles, roioutput, h2b[i], allfiles[i]);
	//}
	//else {
	//roiselection(input,h2bfiles, roioutput, h2b[i], allfiles[2*i+1]);
	//}
//}
//if (isOpen("Log")){
	//selectWindow("Log");
	//saveAs("Text", cropoutput+"no-ROI.txt");
//}
//run("Close");